## WORLD
/gate/world/geometry/setXLength 100 cm
/gate/world/geometry/setYLength 100 cm
/gate/world/geometry/setZLength 100 cm


## SPECT PANEL
/gate/world/daughters/name SPECThead
/gate/world/daughters/insert box
/gate/SPECThead/geometry/setXLength   64.0 mm
/gate/SPECThead/geometry/setYLength   64.0 mm
/gate/SPECThead/geometry/setZLength  196.0 mm
/gate/SPECThead/placement/setTranslation  0. 245.25 0. mm
#/gate/SPECThead/placement/setRotationAxis 0 0 1
#/gate/SPECThead/placement/setRotationAngle 42.5 deg
/gate/SPECThead/setMaterial Lead
/gate/SPECThead/repeaters/insert ring
/gate/SPECThead/ring/setRepeatNumber 12
/gate/SPECThead/vis/forceWireframe

#/gate/SPECThead/moves/insert 			rotation
#/gate/SPECThead/rotation/setSpeed		-0.05 deg/s
#/gate/SPECThead/rotation/setAxis		0 0 1


## CRYSTAL
/gate/SPECThead/daughters/name crystal
/gate/SPECThead/daughters/insert box
/gate/crystal/geometry/setXLength   44.0 mm
/gate/crystal/geometry/setYLength   10.0 mm
/gate/crystal/geometry/setZLength  176.0 mm
/gate/crystal/placement/setTranslation  0.0 -3.0 0. mm
/gate/crystal/setMaterial CZT
/gate/crystal/vis/setColor yellow
/gate/crystal/vis/forceWireframe


## COLLIMATOR
/gate/SPECThead/daughters/name collimator
/gate/SPECThead/daughters/insert box
/gate/collimator/geometry/setXLength  44.0 mm
/gate/collimator/geometry/setYLength  24.0 mm
/gate/collimator/geometry/setZLength 176.0 mm
/gate/collimator/placement/setTranslation  0. -20. 0. mm
/gate/collimator/setMaterial Tungsten
/gate/collimator/vis/setColor red
/gate/collimator/vis/forceWireframe

/gate/collimator/daughters/name hole
/gate/collimator/daughters/insert box
/gate/hole/geometry/setXLength  0.9 mm
/gate/hole/geometry/setYLength 24.0 mm
/gate/hole/geometry/setZLength  0.9 mm
/gate/hole/setMaterial Air
/gate/hole/vis/setColor gray
/gate/hole/vis/setVisible false
/gate/hole/vis/forceWireframe

/gate/hole/repeaters/insert cubicArray
/gate/hole/cubicArray/setRepeatNumberX 44
/gate/hole/cubicArray/setRepeatNumberY 1
/gate/hole/cubicArray/setRepeatNumberZ 176
/gate/hole/cubicArray/setRepeatVector 1.0  0.0  1.0 mm

/gate/systems/SPECThead/crystal/attach crystal
/gate/crystal/attachCrystalSD

/gate/collimator/attachPhantomSD
/gate/hole/attachPhantomSD
/gate/systems/SPECThead/describe

